<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p1="clr-namespace:Task;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Tracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>0</vid:Index>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>video.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpPerspective">
                <cv:Source>
                  <cv:Point2f>
                    <cv:X>182.666672</cv:X>
                    <cv:Y>149.593491</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>293.333344</cv:X>
                    <cv:Y>437.073181</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>533.3333</cv:X>
                    <cv:Y>372.032532</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>394.666656</cv:X>
                    <cv:Y>154.796753</cv:Y>
                  </cv:Point2f>
                </cv:Source>
                <cv:Destination>
                  <cv:Point2f>
                    <cv:X>0</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>0</cv:X>
                    <cv:Y>480</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>640</cv:X>
                    <cv:Y>480</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>640</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Point2f>
                </cv:Destination>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hsv</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>81</cv:Val0>
                  <cv:Val1>36</cv:Val1>
                  <cv:Val2>45</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>164</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>tracking.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Rendering</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeIn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>DIPort0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeIn</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>task_config.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromYaml">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Block" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Trial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT3S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>DrawStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PosX</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>-0.5</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>0.5</ExtentX>
                    <ExtentY>0.5</ExtentY>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <Angle>0</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PokeIn</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="13" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Outcome</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Hit</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>DOPort0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                      <beh:OutputClear>DOPort0</beh:OutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>